---
API: 2.1
OpenSesame: 3.2.5b1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Autocorrect functions sudha"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/sudhakaran/Desktop/Speller"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background black

define sketchpad ask_for_input
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your Sentence is: [incomplete]<br />Press any key to continue" x=0 y=0 z_index=0

define form_multiple_choice autocomplete_options
	set timeout infinite
	set spacing 10
	set question "[incomplete]"
	__options__
	X
	[suggestion1]
	[suggestion2]
	[suggestion3]
	__end__
	set margins "50;50;50;50"
	set form_var chosen
	set form_title "Autocomplete suggestions"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script always
	run new_loop always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response response

define inline_script letter_appending
	set description "Executes Python code"
	___run__
	var.letter = "[response]"
	if var.letter == "space":
		var.letter = " "
	else:
		var.string += var.letter 
	__end__
	set _prepare ""

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	set form_text "Hey!"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	#To record keypresses and append them into a single string
	var.letter = ""
	var.string = ""
	var.eye = ""
	var.chosen = ""
	var.cancel = "cancel"
	var.sentence = ""
	removedSuggestions = []
	var.rowlen = 0
	var.i = 0
	var.temp1 = []
	var.incomplete = ""
	global removedSuggestions
	#To define the variables shown in the menu with autocomplete suggestions
	var.suggestion1 = ""
	var.suggestion2 = ""
	var.suggestion3 = ""
	__end__
	set _prepare ""

define inline_script new_inline_script_1
	set description "Executes Python code"
	___run__
	import csv
	import pandas
	import copy
	from pandas import DataFrame, read_csv
	import matplotlib.pyplot as plt
	
	df = pandas.read_csv("/home//sudhakaran//Desktop//Speller//20k.csv")
	df = df.sort_values(by = 'priority', ascending = False)
	var.rowlen = len(df.index) 
	var.i = 0
	while var.i < var.rowlen:
		x = df.iloc[var.i]['word']
		print(x + var.string)
		print(x.startswith(var.string))
		if x.startswith(var.string):
			var.suggestion1 = x
			break
		else:
			var.suggestion1 = ""
		var.i += 1
	__end__
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define loop new_loop
	set source_file "C:\\Users\\Arnout\\Desktop\\Master\\User Models\\Autocomplete\\Repositories"
	set source table
	set repeat 1000
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column 1
	setcycle 1 empty_column 2
	setcycle 2 empty_column 3
	setcycle 3 empty_column 4
	setcycle 4 empty_column 5
	setcycle 5 empty_column 6
	setcycle 6 empty_column 7
	setcycle 7 empty_column 8
	setcycle 8 empty_column 9
	setcycle 9 empty_column 10
	setcycle 10 empty_column 11
	setcycle 11 empty_column 12
	run new_sequence

define loop new_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word "I "
	setcycle 0 priority 1
	setcycle 1 word "are "
	setcycle 1 priority 2
	setcycle 2 word "am "
	setcycle 2 priority 3
	setcycle 3 word "we "
	setcycle 3 priority 4
	setcycle 4 word "the "
	setcycle 4 priority 5
	setcycle 5 word and
	setcycle 5 priority 6
	run update_variables

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run ask_for_input always
	run keyboard_response always
	run letter_appending always
	run new_inline_script_1 always
	run autocomplete_options always
	run update_string always
	run selected_Suggestion always
	run new_logger always

define sketchpad new_sketchpad
	set duration 445
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You typed [sentence]" x=0 y=0 z_index=0

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Displays stimuli"

define feedback selected_Suggestion
	set reset_variables no
	set duration 745
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your sentence is: [incomplete]" x=0 y=0 z_index=0

define inline_script update_string
	set description "Executes Python code"
	___run__
	if var.chosen != "X":
		var.sentence += var.chosen + " "
		var.temp1 = df.loc[df.word == var.chosen]
		df.priority[df.word == var.chosen] = var.temp1.iloc[0]['priority'] + 500
		df.to_csv("/home//sudhakaran//Desktop//Speller//20k.csv", encoding='utf-8', index=False)
		var.string = ""
		var.letter = ""
		var.suggestion1 = ""
		var.suggestion2 = ""
		var.suggestion3 = ""
		var.incomplete = var.sentence
		del removedSuggestions[:]
	else:
		var.suggestion1 = ""
		var.suggestion2 = ""
		var.suggestion3 = ""
		var.incomplete += var.letter
		if var.letter == " ":
			var.sentence = var.incomplete
			df.loc[var.rowlen] = [var.string, 10000]
			df.to_csv("/home//sudhakaran//Desktop//Speller//20k.csv", encoding='utf-8', index=False)
			var.string = ""
			var.letter = ""
	__end__
	set _prepare ""

define inline_script update_variables
	set description "Executes Python code"
	___run__
	print(var.letter)
	print(var.word.startswith(var.letter))
	var.word = var.word.lower()
	var.letter = var.letter.lower()
	if var.word.startswith(var.letter):
		if var.suggestion1 == "":
			var.suggestion1=var.word
		elif var.suggestion2 =="":
			var.suggestion2=var.word
		elif var.suggestion3 =="":
			var.suggestion3=var.word
	__end__
	set _prepare ""

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.1 <i>Jazzy James</i>" x=0 y=0 z_index=0

